CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:KI67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:vwf
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C4")
    Name to assign these images:ckit
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:dapi
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):23,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:9
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.38
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.4,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:KI67
    Name the primary objects to be identified:KI
    Typical diameter of objects, in pixel units (Min,Max):30,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:6
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.5,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:vwf
    Name the primary objects to be identified:vwf
    Typical diameter of objects, in pixel units (Min,Max):30,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:25
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:10
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.4,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:ckit
    Name the primary objects to be identified:CKIT
    Typical diameter of objects, in pixel units (Min,Max):25,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:15
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:12
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.4,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RelateObjects:[module_num:9|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
    Parent objects:KI
    Child objects:vwf
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:vwfki
    Parent name:VWF+ CELLS
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None

RelateObjects:[module_num:10|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
    Parent objects:KI
    Child objects:CKIT
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:ckitKI
    Parent name:CKIT+ KI67+
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None

RelateObjects:[module_num:11|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
    Parent objects:CKIT
    Child objects:vwf
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:ckitvwf
    Parent name:CKIT+ VWF+
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None

RelateObjects:[module_num:12|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
    Parent objects:ckitKI
    Child objects:vwf
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:ckitKIvwf
    Parent name:CKIT+ VWF+ KI67+
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None

MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:KI67
    Select objects to measure:CKIT
    Select objects to measure:Nuclei
    Select objects to measure:ckitvwf
    Select objects to measure:vwf

MeasureImageAreaOccupied:[module_num:14|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:vwf
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
MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:CKIT
    Select objects to measure:KI
    Select objects to measure:Nuclei
    Select objects to measure:ckitKI
    Select objects to measure:ckitKIvwf
    Select objects to measure:ckitvwf
    Select objects to measure:vwf
    Select objects to measure:vwfki
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|Desktop\\RESULTS\\Nouveau dossier
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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